Journal
Description: Pulse action inside MDA
Version VersionNumber=2.4

Comment: Select the last active image window with the ROI
Run Journal
  stExecuteJournal = "C:\MM\app\mmproc\journals\targeted-illumination-common\_load_regions.jnl"

Comment: Pulse, pulling coordinate setting from current magnification selection
Targeted Illumination
  IlluminationSetting = "MicroPoint" Override=LastValue OverrideVariable=Illumination setting
  ImageIlluminationSetting = "Confocal 488" Override=LastValue OverrideVariable=Imaging Illumination setting
  CoordinateSetting = "Confocal 60x" Override=Variable OverrideVariable=Device.Magnification.Setting
  PositionSetting = 2 Override=Variable OverrideVariable=3
  PositionImageCoordinatesX = 256 Override=LastValue OverrideVariable=Position: image coordinate X
  PositionImageCoordinatesY = 256 Override=LastValue OverrideVariable=Position: image coordinate Y
  NumberOfLaserFires = 1 Override=LastValue OverrideVariable=Number of laser pulses
  NeutralDensitySetting = 24 Override=LastValue OverrideVariable=Attenuator plate: % transmission
  dExpDurMS = 0.04 Override=LastValue OverrideVariable=Mask Exposure Duration [ms]
